PsychoPy2experiment version="2024.2.2"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = SLS673_FA24_Assignment2
  keyboardBackend = ioHub
  logging level = warning
  runMode = 0
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Routines
  Routine trial
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Sentence 1
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine last_word_response
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    TextComponent recall_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Now recall the last words in the sentences you just read.
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    TextboxComponent textbox_1
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = False
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine Instructions
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    TextComponent instructions_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to our experiment!

        You will see a sentence on the screen. Please read the sentence out loud. Once you have done so, press the space button to move on.

        Now, press the space button to see sentences.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine trial
  Routine last_word_response
